CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Binary mask
    Name to assign these images:Segmentations
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Segmentations
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):1,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.8
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Documents/AIHCBootcamp/squidpy_tutorial_cellprofiler
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:cell_measurements_
    Overwrite existing files without warning?:No
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